PsychoPy2experiment version="2024.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1280, 800]
  color = $[-1, -1, -1]
  expName = spatial cueing task first version
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Instruct
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    TextComponent instructText
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      units = height
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      text:
        Welcome to the experiment!

        This experiment aims provide insight into how our brain reacts to different type of emotional visual stimuli.

        You will be asked to complete a task where you respond to visual targets appearing either on the left or right side of the screen. Before each target appears, a cue will be shown, which is either a neutral gaze or an emotional face with the eyes looking in a specific direction.

        Your task is to respond as quickly and accurately as possible when the target dot appears.

        Your participation is anonymous and you are free to withdraw at any time without giving a reason.

        Further instructions will follow after the consent form.
    KeyboardComponent continuekey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent introkey
      bold = False
      borderColor = black
      color = -1.0000, -1.0000, -1.0000
      editable = False
      fillColor = 0.3569, 0.6941, 0.8039
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      text = PRESS 'SPACE' TO CONTINUE
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    CodeComponent consentcode111
      Code Type = Auto->JS
      disabled = True
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      Each Frame:
        keys = event.getKeys()

        if 'y' in keys:
            continueRoutine = False
        elif 'n' in keys:
            core.quit()
  Routine welcome
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    TextComponent welcometext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        In this task, you will see a face cue followed by a target and your goal is to respond as quickly and accurately as possible:

        - Press the "A" key if the target appears on the LEFT
        - Press the "L" key if the target appears on the RIGHT

        You will start with a short practice round
        before the main experiment begins.
    TextboxComponent start
      bold = False
      borderColor = black
      color = -1.0000, -1.0000, -1.0000
      editable = False
      fillColor = 0.3569, 0.6941, 0.8039
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      text = PRESS 'SPACE' TO START
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    KeyboardComponent practicekey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.8
      text [set every repeat] = +
      units = height
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    ImageComponent cue
      ori [set every repeat] = cueOri
      size = (.25, .25)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.4
      units = height
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    CodeComponent cuedrawcode
      Code Type = Auto->JS
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      Begin Routine:
        import random
        cues = ['cueimages/cue1.png', 'cueimages/cue2.png']
        random_cue = random.choice(cues)
        cue.setImage(random_cue)

        cue.flipHoriz = (cueOri == 180)
        cue.ori = 0


        #if cueOri is not None and cueOri != '':
            #cue.ori = float(cueOri)
            #cue.flipHoriz = (float(cueOri) == 180)
        #else:
            #cue.ori = 0
            #cue.flipHoriz = False
    ImageComponent target
      image = targetimage/circle_grey.png
      pos [set every repeat] = [targetX, 0]
      size = (.25, .25)
      startVal [time (s)] = 1.2
      stopVal [duration (s)] = 2.8
      units = height
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    KeyboardComponent key_resp
      allowedKeys = 'a','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.2
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    CodeComponent track_rt
      Code Type = Auto->JS
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      Begin Experiment:
        valid_rts = []
        invalid_rts = []
      End Routine:
        if key_resp.keys:
            rt = key_resp.rt
            thisExp.addData('reaction_time', rt)

        if congr == 1:
            valid_rts.append(key_resp.rt)
        elif congr == 0:
            invalid_rts.append(key_resp.rt)
    TextComponent reminder
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 2.8
      stopVal [duration (s)] = 1.2
      text = Click on a key!
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    TextboxComponent trial_counter
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      pos = (0, -0.45)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(trials.thisN+1) + '/' + str(trials.nTotal)
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    CodeComponent fbcode
      Code Type = Auto->JS
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      End Routine:
        print("Key pressed:", key_resp.keys)
        if key_resp.keys:
            if targetX < 0:
                if 'a' in key_resp.keys:
                    feedbackTxt = 'Correct'
                else:
                    feedbackTxt = 'Incorrect'

            elif targetX > 0:
                if 'l' in key_resp.keys:
                    feedbackTxt = 'Correct'
                else:
                    feedbackTxt = 'Incorrect'
        else:
            feedbackTxt = 'No response'

        feedbackTxt1.setText(feedbackTxt)
    CodeComponent trialtiming
      Code Type = Auto->JS
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      Begin Routine:
        rtClock = core.Clock()
      Each Frame:
        if t >= 4.5:
            continueRoutine = False

        if key_resp.keys:
            rt = rtClock.getTime()
      End Routine:
        feedbackTxt = "No response"

        if key_resp.keys:
            rt = rtClock.getTime()

            if rt > 3.7:
                feedbackTxt = "Too slow"
            elif (targetX < 0 and 'a' in key_resp.keys) or (targetX > 0 and 'l' in key_resp.keys):
                feedbackTxt = "Correct"
            else:
                feedbackTxt = "Incorrect"
  Routine feedback1
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    TextComponent feedbackTxt1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedbackTxt
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    TextboxComponent trialClock
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.05
      opacity = 0.8
      pos = (0, -0.45)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(trials.thisN+1) + '/' + str(trials.nTotal)
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  Routine endofpractice
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    TextComponent instructText1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Practice is over — time for the real task!
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    KeyboardComponent Startkey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent start1
      bold = False
      borderColor = black
      color = -1.0000, -1.0000, -1.0000
      editable = False
      fillColor = 0.3569, 0.6941, 0.8039
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      text = PRESS 'SPACE' TO START
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  Routine trial1
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    TextComponent fixation1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
      text = +
      units = height
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    CodeComponent fixationcode
      Code Type = Auto->JS
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      Each Frame:
        try:
            fix_duration = iti
        except:
            fix_duration = 0.8
    ImageComponent cueimg
      image [set every repeat] = $random_cue
      ori [set every repeat] = cueOri
      size = (.25, .25)
      startVal [time (s)] = $iti
      stopVal [duration (s)] = 0.4
      units = height
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    CodeComponent cuedrawcode_1
      Code Type = Auto->JS
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      Begin Routine:
        import random
        cues = ['cueimages/cue1.png', 'cueimages/cue2.png']
        random_cue = random.choice(cues)
        cueimg.setImage(random_cue)

        cueimg.flipHoriz = (cueOri == 180)
        cueimg.ori = 0
    ImageComponent target1
      image [set every repeat] = targetimage/circle_grey.png
      pos [set every repeat] = [targetX, 0]
      size = (.25, .25)
      startVal [time (s)] = $iti + 0.4 + soa
      stopVal [duration (s)] = 2.8
      units = height
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    KeyboardComponent key_resp2
      allowedKeys = 'a','l'
      forceEndRoutine = True
      startVal [time (s)] = $iti + 0.4 + soa
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    CodeComponent track_rt1
      Code Type = Auto->JS
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      Begin Experiment:
        valid_rts = []
        invalid_rts = []
      End Routine:
        #if congr == 1:
            #valid_rts.append(key_resp.rt)
        #elif congr == 0:
            #invalid_rts.append(key_resp.rt)

        #if key_resp2.rt is not None:
            #try:
                #rt_value = float(key_resp2.rt)
                #if congr == 1:
                    #valid_rts.append(rt_value)
                #elif congr == 0:
                    #invalid_rts.append(rt_value)
            #except:
                #print("RT could not be converted:", key_resp2.rt)


        if key_resp2.rt is not None:
            try:
                rt_value = float(key_resp2.rt)
                if congr == 1:
                    valid_rts.append(rt_value)
                    print("✅ Valid RT added:", rt_value)
                elif congr == 0:
                    invalid_rts.append(rt_value)
                    print("✅ Invalid RT added:", rt_value)
            except:
                print("❌ Bad RT, not added:", key_resp2.rt)
        else:
            print("⚠️ No RT recorded this trial.")
    TextComponent reminder1
      letterHeight = 0.05
      pos = (0, 0.4)
      text = Click a key to respond!
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    CodeComponent remindercode
      Code Type = Auto->JS
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      Begin Routine:
        reminder1_shown = False
        reminder_time = iti + 0.4 + soa + 1.0
      Each Frame:
        #if not reminder1_shown and t >= reminder_time:
           # if not key_resp.keys:
               # reminder1.setAutoDraw(True)
               # reminder1_shown = True

        #if key_resp.keys and reminder1_shown:
            #reminder1.setAutoDraw(False)


        if not reminder1_shown and t >= reminder_time:
            if not key_resp2.keys:
                print(">>> Reminder SHOWN!")
                reminder1.setAutoDraw(True)
                reminder1_shown = True

        if key_resp2.keys and reminder1_shown:
            print(">>> Reminder HIDDEN after response.")
            reminder1.setAutoDraw(False)



        if t > reminder_time + 1.5 and not reminder1_shown:
            print(">>> Reminder should have shown by now, but didn't!")
      End Routine:
        reminder1.setAutoDraw(False)
    CodeComponent timingcode
      Code Type = Auto->JS
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      Each Frame:
        if t >= 4.5:
            continueRoutine = False

        if key_resp.keys:
            rt = rtClock.getTime()
  Routine finish
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    TextComponent finishMsg_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = height
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    CodeComponent endingfb
      Code Type = Auto->JS
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      Begin Experiment:
        valid_rts = []
        invalid_rts = []
      Begin Routine:
        if valid_rts:
            valid_av = sum(valid_rts) / len(valid_rts)
        else:
            valid_av = 0.0

        if invalid_rts:
            invalid_av = sum(invalid_rts) / len(invalid_rts)
        else:
            invalid_av = 0.0

        thisExp.addData('valid_av', valid_av)
        thisExp.addData('invalid_av', invalid_av)

        endfb = (
            "End of experiment.\n\n"
            f"Your average reaction time when the cue matched the target location trials was {int(valid_av * 1000)} ms.\n"
            f"When the cue pointed away from the target, it was {int(invalid_av * 1000)} ms.\n\n"
            "Thank you for participating!"
        )

        finishMsg_2.setText(endfb)
      End Routine:
        if congr == 1:
            valid_rts.append(key_resp.rt)
        elif congr == 0:
            invalid_rts.append(key_resp.rt)
  Routine consent
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Consent Form

        By pressing ‘Y’, you confirm that:

        - You are 18 years or older
        - You have normal or corrected-to-normal vision and hearing
        - You understand what the study involves
        - You are participating voluntarily and may withdraw at any time
        - You consent to your anonymous data being used for research purposes

        Press ‘Y’ to continue.
        Press ‘N’ if you do not consent – the experiment will end.
    KeyboardComponent consentresp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent consentcode
      Code Type = Auto->JS
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      Each Frame:
        keys = event.getKeys()

        if 'y' in keys:
            continueRoutine = False
        elif 'n' in keys:
            core.quit()
Flow
  Routine Instruct
  Routine consent
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = practice conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('targetX', -0.35), ('cueOri', 0), ('congr', 1), ('corrAns', 'left'), ('Validity', 'cued')]),
      OrderedDict([('targetX', 0.35), ('cueOri', 180), ('congr', 1), ('corrAns', 'right'), ('Validity', 'cued')]),
      OrderedDict([('targetX', -0.35), ('cueOri', 0), ('congr', 1), ('corrAns', 'left'), ('Validity', 'cued')]),
      OrderedDict([('targetX', 0.35), ('cueOri', 180), ('congr', 1), ('corrAns', 'right'), ('Validity', 'cued')]),
      OrderedDict([('targetX', -0.35), ('cueOri', 180), ('congr', 0), ('corrAns', 'left'), ('Validity', 'uncued')]),
      OrderedDict([('targetX', 0.35), ('cueOri', 0), ('congr', 0), ('corrAns', 'right'), ('Validity', 'uncued')]),
      OrderedDict([('targetX', -0.35), ('cueOri', 180), ('congr', 0), ('corrAns', 'left'), ('Validity', 'uncued')]),
      OrderedDict([('targetX', 0.35), ('cueOri', 0), ('congr', 0), ('corrAns', 'right'), ('Validity', 'uncued')]),
      OrderedDict([('targetX', -0.35), ('cueOri', 180), ('congr', 0), ('corrAns', 'left'), ('Validity', 'uncued')])]
    Routine trial
    Routine feedback1
  LoopTerminator trials
  Routine endofpractice
  LoopInitiator trials1 loopType="TrialHandler"
    conditionsFile = mainconditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('targetX', -0.35), ('cueOri', 0), ('congr', 1), ('corrAns', 'left'), ('Validity', 'cued'), ('soa', 0.2), ('iti', 1.8)]),
      OrderedDict([('targetX', -0.35), ('cueOri', 0), ('congr', 1), ('corrAns', 'left'), ('Validity', 'cued'), ('soa', 0.1), ('iti', 1.0)]),
      OrderedDict([('targetX', -0.35), ('cueOri', 0), ('congr', 1), ('corrAns', 'left'), ('Validity', 'cued'), ('soa', 0.1), ('iti', 1.2)]),
      OrderedDict([('targetX', -0.35), ('cueOri', 0), ('congr', 1), ('corrAns', 'left'), ('Validity', 'cued'), ('soa', 0.3), ('iti', 1.0)]),
      OrderedDict([('targetX', -0.35), ('cueOri', 0), ('congr', 1), ('corrAns', 'left'), ('Validity', 'cued'), ('soa', 0.7), ('iti', 1.4)]),
      OrderedDict([('targetX', -0.35), ('cueOri', 0), ('congr', 1), ('corrAns', 'left'), ('Validity', 'cued'), ('soa', 0.2), ('iti', 1.4)]),
      OrderedDict([('targetX', -0.35), ('cueOri', 0), ('congr', 1), ('corrAns', 'left'), ('Validity', 'cued'), ('soa', 0.3), ('iti', 1.0)]),
      OrderedDict([('targetX', -0.35), ('cueOri', 0), ('congr', 1), ('corrAns', 'left'), ('Validity', 'cued'), ('soa', 0.3), ('iti', 1.4)]),
      OrderedDict([('targetX', -0.35), ('cueOri', 0), ('congr', 1), ('corrAns', 'left'), ('Validity', 'cued'), ('soa', 0.1), ('iti', 1.8)]),
      OrderedDict([('targetX', -0.35), ('cueOri', 0), ('congr', 1), ('corrAns', 'left'), ('Validity', 'cued'), ('soa', 0.3), ('iti', 1.4)]),
      OrderedDict([('targetX', -0.35), ('cueOri', 0), ('congr', 1), ('corrAns', 'left'), ('Validity', 'cued'), ('soa', 0.2), ('iti', 1.4)])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
    Routine trial1
  LoopTerminator trials1
  Routine finish
